PsychoPy2experiment version="1.82.01"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  color = black
  Window size (pixels) = [1366, 768]
  Full-screen window = True
  Experiment info = {u'gender': u'', u'age': u'', u'participant': u''}
  expName = IAT
  logging level = error
  Units = use prefs
  Save log file = False
  Screen = 1
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Routines
  Routine end
    TextComponent endMessage
      text [set every repeat] = $instruction
      startVal [time (s)] = 0
      letterHeight = 0.07
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    KeyboardComponent endResponse
      forceEndRoutine = True
      allowedKeys = 'return'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions1and5
    TextComponent instructionsBox1_2
      text [set every repeat] = $instruction
      pos = [0, -.15]
      startVal [time (s)] = 0.3
      letterHeight = 0.05
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    KeyboardComponent responseContinue1_2
      correctAns = $requiredResponse
      forceEndRoutine = True
      discard previous = False
      allowedKeys = 'space'
      startVal [time (s)] = 0.3
      store = first key
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    TextComponent target1box1_inst_2
      text [set every repeat] = $targetLeft
      pos = [-.6, .85]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent target2box1_inst_2
      text [set every repeat] = $targetRight
      pos = [0.6, 0.85]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine instructions2
    TextComponent instructionsBox2
      text [set every repeat] = $instruction
      pos = [0, -.15]
      startVal [time (s)] = 0.3
      letterHeight = 0.05
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    KeyboardComponent responseContinue2
      correctAns = $requiredResponse
      forceEndRoutine = True
      discard previous = False
      allowedKeys = 'space'
      startVal [time (s)] = 0.3
      store = first key
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    TextComponent attribute1box2_inst
      color = $[-1, 1, -1]
      text [set every repeat] = $attributeLeft
      pos = [-.6, .85]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent attribute2box2_inst
      color = $[-1, 1, -1]
      text [set every repeat] = $attributeRight
      pos = [0.6, 0.85]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine trialBlock6and7
    TextComponent stimulusBbox6and7
      color [set every repeat] = $stimulusColour
      text [set every repeat] = $stimulusB
      startVal [time (s)] = 0.3
      letterHeight = 0.1
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    KeyboardComponent responseRequired6and7
      correctAns = $requiredResponse
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys [set every repeat] = requiredAllowed
      startVal [time (s)] = 0.3
      store = first key
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    KeyboardComponent responseFeedback6and7
      correctAns = feedbackResponse
      storeCorrect = True
      forceEndRoutine = False
      allowedKeys [set every repeat] = feedbackAllowed
      startVal [time (s)] = 0.3
      store = first key
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    CodeComponent code6and7
      Begin Experiment:
        msg1=""
      Each Frame:
        if len(responseFeedback6and7.keys)<1:
            msg1=""
        else:
            msg1="X"
    TextComponent accuracyFeedback6and7
      color = red
      text [set every frame] = $msg1
      pos = [0, -.5]
      startVal [time (s)] = 0.3
      letterHeight = 0.2
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    TextComponent target1box6and7
      text [set every repeat] = $target1
      pos = [.6, .85]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent attribute1box6and7
      color [set every repeat] = $[-1, 1, -1]
      pos = [-.6, 0.55]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text [set every repeat]:
        $attribute1
    TextComponent target2box6and7
      text [set every repeat] = $target2
      pos = [-.6, 0.85]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent attribute2box6and7
      color = $[-1, 1, -1]
      text [set every repeat] = $attribute2
      pos = [0.6, 0.55]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent orLeftBox6and7
      text [set every repeat] = $orStimulus
      pos = [-.6, .7]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent orRightBox6and7
      text [set every repeat] = $orStimulus
      pos = [.6, .7]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine trialBlock5
    TextComponent stimulusAbox5
      color [set every repeat] = $stimulusColour
      text [set every repeat] = $stimulusB
      startVal [time (s)] = 0.3
      letterHeight = 0.1
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    KeyboardComponent responseRequired5
      correctAns = $requiredResponse
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys [set every repeat] = requiredAllowed
      startVal [time (s)] = 0.3
      store = first key
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    KeyboardComponent responseFeedback5
      correctAns = $feedbackAllowed
      storeCorrect = True
      forceEndRoutine = False
      allowedKeys [set every repeat] = feedbackResponse
      startVal [time (s)] = 0.3
      store = first key
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    CodeComponent code5
      Begin Experiment:
        msg1=""
      Each Frame:
        if len(responseFeedback5.keys)<1:
            msg1=""
        else:
            msg1="X"
    TextComponent accuracyFeedback5
      color = red
      text [set every frame] = $msg1
      pos = [0, -.5]
      startVal [time (s)] = 0.3
      letterHeight = 0.2
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    TextComponent target1box5
      text [set every repeat] = $target1
      pos = [.6, .85]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent target2box5
      text [set every repeat] = $target2
      pos = [-.6, 0.85]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine trialBlock2
    TextComponent stimulusAbox2
      color [set every repeat] = $stimulusColour
      text [set every repeat] = $stimulusA
      startVal [time (s)] = 0.3
      letterHeight = 0.1
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    KeyboardComponent responseRequired2
      correctAns = $requiredResponse
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys [set every repeat] = requiredAllowed
      startVal [time (s)] = 0.3
      store = first key
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    KeyboardComponent responseFeedback2
      correctAns = $feedbackAllowed
      storeCorrect = True
      forceEndRoutine = False
      allowedKeys [set every repeat] = feedbackResponse
      startVal [time (s)] = 0.3
      store = first key
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    CodeComponent code2
      Begin Experiment:
        msg1=""
      Each Frame:
        if len(responseFeedback2.keys)<1:
            msg1=""
        else:
            msg1="X"
    TextComponent accuracyFeedback2
      color = red
      text [set every frame] = $msg1
      pos = [0, -.5]
      startVal [time (s)] = 0.3
      letterHeight = 0.2
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    TextComponent attribute1box2
      color [set every repeat] = $[-1, 1, -1]
      pos = [-.6, 0.85]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text [set every repeat]:
        $attribute1
    TextComponent attribute2box2
      color = $[-1, 1, -1]
      text [set every repeat] = $attribute2
      pos = [0.6, 0.85]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine trialBlock1
    TextComponent stimulusAbox1
      color [set every repeat] = $stimulusColour
      text [set every repeat] = $stimulusA
      startVal [time (s)] = 0.3
      letterHeight = 0.1
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    KeyboardComponent responseRequired1
      correctAns = $requiredResponse
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys [set every repeat] = requiredAllowed
      startVal [time (s)] = 0.3
      store = first key
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    KeyboardComponent responseFeedback1
      correctAns = $feedbackResponse
      storeCorrect = True
      forceEndRoutine = False
      allowedKeys [set every repeat] = feedbackResponse
      startVal [time (s)] = 0.3
      store = first key
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    CodeComponent code1
      Begin Experiment:
        msg1=""
      Each Frame:
        if len(responseFeedback1.keys)<1:
            msg1=""
        else:
            msg1="X"
    TextComponent accuracyFeedback1
      color = red
      text [set every frame] = $msg1
      pos = [0, -.5]
      startVal [time (s)] = 0.3
      letterHeight = 0.2
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    TextComponent target1box1
      text [set every repeat] = $target1
      pos = [-.6, .85]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent target2box1
      text [set every repeat] = $target2
      pos = [0.6, 0.85]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine trialBlock3and4
    TextComponent stimulusAbox3and4
      color [set every repeat] = $stimulusColour
      text [set every repeat] = $stimulusA
      startVal [time (s)] = 0.3
      letterHeight = 0.1
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    KeyboardComponent responseRequired3and4
      correctAns = $requiredResponse
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys [set every repeat] = requiredAllowed
      startVal [time (s)] = 0.3
      store = first key
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    KeyboardComponent responseFeedback3and4
      correctAns = $feedbackAllowed
      storeCorrect = True
      forceEndRoutine = False
      allowedKeys [set every repeat] = feedbackResponse
      startVal [time (s)] = 0.3
      store = first key
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    CodeComponent code3and4
      Begin Experiment:
        msg1=""
      Each Frame:
        if len(responseFeedback3and4.keys)<1:
            msg1=""
        else:
            msg1="X"
    TextComponent accuracyFeedback3and4
      color = red
      text [set every frame] = $msg1
      pos = [0, -.5]
      startVal [time (s)] = 0.3
      letterHeight = 0.2
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    TextComponent target1box3and4
      text [set every repeat] = $target1
      pos = [-.6, .85]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent attribute1box3and4
      color [set every repeat] = $[-1, 1, -1]
      pos = [-.6, 0.55]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text [set every repeat]:
        $attribute1
    TextComponent target2box3and4
      text [set every repeat] = $target2
      pos = [0.6, 0.85]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent attribute2box3and4
      color = $[-1, 1, -1]
      text [set every repeat] = $attribute2
      pos = [0.6, 0.55]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent orLeftBox3and4
      text [set every repeat] = $orStimulus
      pos = [-.6, .7]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent orRightBox3and4
      text [set every repeat] = $orStimulus
      pos = [.6, .7]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine instructions3467
    TextComponent instructionsBox3467
      text [set every repeat] = $instruction
      pos = [0, -.15]
      startVal [time (s)] = 0.3
      letterHeight = 0.05
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    KeyboardComponent responseContinue3467
      correctAns = $requiredResponse
      forceEndRoutine = True
      discard previous = False
      allowedKeys = 'space'
      startVal [time (s)] = 0.3
      store = first key
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    TextComponent target1box3467
      text [set every repeat] = $targetLeft
      pos = [-.6, .85]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent attribute1box3467
      color [set every repeat] = $[-1, 1, -1]
      text [set every repeat] = $attributeLeft
      pos = [-.6, 0.55]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent target2box3467
      text [set every repeat] = $targetRight
      pos = [0.6, 0.85]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent attribute2box3467
      color = $[-1, 1, -1]
      text [set every repeat] = $attributeRight
      pos = [0.6, 0.55]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent orLeftBox3467
      text [set every repeat] = $orStimulus
      pos = [-.6, .7]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent orRightBox3467
      text [set every repeat] = $orStimulus
      pos = [.6, .7]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  LoopInitiator instructionsLoop1 loopType="TrialHandler"
    conditionsFile = Instructions.xlsx
    loopType = sequential
    nReps = 1
    Selected rows = 0
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    conditions:
      [{u'instruction': 1},
      {u'instruction': 2},
      {u'instruction': 3},
      {u'instruction': 4},
      {u'instruction': 5},
      {u'instruction': 6},
      {u'instruction': 7},
      {u'instruction': u'end'}]
    Routine instructions1and5
  LoopTerminator instructionsLoop1
  LoopInitiator block1Loop loopType="TrialHandler"
    conditionsFile = Stimuli.xlsx
    loopType = random
    nReps = 2
    Selected rows = 0:10
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    conditions:
      [{u'feedbackResponse': u'i', u'feedbackAllowed': u'i', u'requiredResponse': u'e', u'target2': u'Insects', u'target1': u'Flowers', u'stimulusColour': [1, 1, 1], u'stimulusA': u'Orcid', u'stimulusB': u'Ant', u'trialtype': 1, u'attribute2': u'Negative', u'requiredAllowed': u'e', u'attribute1': u'Good'},
      {u'feedbackResponse': u'i', u'feedbackAllowed': u'i', u'requiredResponse': u'e', u'target2': u'Insects', u'target1': u'Flowers', u'stimulusColour': [1, 1, 1], u'stimulusA': u'Orcid', u'stimulusB': u'Ant', u'trialtype': 1, u'attribute2': u'Negative', u'requiredAllowed': u'e', u'attribute1': u'Good'},
      {u'feedbackResponse': u'i', u'feedbackAllowed': u'i', u'requiredResponse': u'e', u'target2': u'Insects', u'target1': u'Flowers', u'stimulusColour': [1, 1, 1], u'stimulusA': u'Lilly', u'stimulusB': u'Locust', u'trialtype': 1, u'attribute2': u'Negative', u'requiredAllowed': u'e', u'attribute1': u'Good'},
      {u'feedbackResponse': u'i', u'feedbackAllowed': u'i', u'requiredResponse': u'e', u'target2': u'Insects', u'target1': u'Flowers', u'stimulusColour': [1, 1, 1], u'stimulusA': u'Violet', u'stimulusB': u'Bee', u'trialtype': 1, u'attribute2': u'Negative', u'requiredAllowed': u'e', u'attribute1': u'Good'}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
    Routine trialBlock1
  LoopTerminator block1Loop
  LoopInitiator instructionsLoop2 loopType="TrialHandler"
    conditionsFile = Instructions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
    Selected rows = 1
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    conditions:
      [{u'attribute2': u'Negative', u'instruction': u'instructions 1', u'target2': u'Insects', u'attribute1': u'Good', u'target1': u'Flowers'},
      {u'attribute2': u'Negative', u'instruction': u'instructions 2', u'target2': u'Insects', u'attribute1': u'Good', u'target1': u'Flowers'},
      {u'attribute2': u'Negative', u'instruction': u'instructions 3', u'target2': u'Insects', u'attribute1': u'Good', u'target1': u'Flowers'},
      {u'attribute2': u'Negative', u'instruction': u'instructions 4', u'target2': u'Insects', u'attribute1': u'Good', u'target1': u'Flowers'},
      {u'attribute2': u'Negative', u'instruction': u'instructions 5', u'target2': u'Insects', u'attribute1': u'Good', u'target1': u'Flowers'},
      {u'attribute2': u'Negative', u'instruction': u'instructions 6', u'target2': u'Insects', u'attribute1': u'Good', u'target1': u'Flowers'},
      {u'attribute2': u'Negative', u'instruction': u'instructions 7', u'target2': u'Insects', u'attribute1': u'Good', u'target1': u'Flowers'},
      {u'attribute2': u'Negative', u'instruction': u'end', u'target2': u'Insects', u'attribute1': u'Good', u'target1': u'Flowers'}]
    Routine instructions2
  LoopTerminator instructionsLoop2
  LoopInitiator block2Loop loopType="TrialHandler"
    conditionsFile = Stimuli.xlsx
    loopType = random
    nReps = 2
    Selected rows = 10:20
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    conditions:
      [{u'feedbackResponse': u'i', u'feedbackAllowed': u'i', u'requiredResponse': u'e', u'target2': u'Insects', u'target1': u'Flowers', u'stimulusColour': [1, 1, 1], u'stimulusA': u'Orcid', u'stimulusB': u'Ant', u'trialtype': 1, u'attribute2': u'Negative', u'requiredAllowed': u'e', u'attribute1': u'Good'},
      {u'feedbackResponse': u'i', u'feedbackAllowed': u'i', u'requiredResponse': u'e', u'target2': u'Insects', u'target1': u'Flowers', u'stimulusColour': [1, 1, 1], u'stimulusA': u'Orcid', u'stimulusB': u'Ant', u'trialtype': 1, u'attribute2': u'Negative', u'requiredAllowed': u'e', u'attribute1': u'Good'},
      {u'feedbackResponse': u'i', u'feedbackAllowed': u'i', u'requiredResponse': u'e', u'target2': u'Insects', u'target1': u'Flowers', u'stimulusColour': [1, 1, 1], u'stimulusA': u'Lilly', u'stimulusB': u'Locust', u'trialtype': 1, u'attribute2': u'Negative', u'requiredAllowed': u'e', u'attribute1': u'Good'},
      {u'feedbackResponse': u'i', u'feedbackAllowed': u'i', u'requiredResponse': u'e', u'target2': u'Insects', u'target1': u'Flowers', u'stimulusColour': [1, 1, 1], u'stimulusA': u'Violet', u'stimulusB': u'Bee', u'trialtype': 1, u'attribute2': u'Negative', u'requiredAllowed': u'e', u'attribute1': u'Good'}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
    Routine trialBlock2
  LoopTerminator block2Loop
  LoopInitiator instructionsLoop3 loopType="TrialHandler"
    conditionsFile = Instructions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
    Selected rows = 2
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    conditions:
      [{u'attribute2': u'Negative', u'instruction': u'instructions 1', u'target2': u'Insects', u'attribute1': u'Good', u'target1': u'Flowers'},
      {u'attribute2': u'Negative', u'instruction': u'instructions 2', u'target2': u'Insects', u'attribute1': u'Good', u'target1': u'Flowers'},
      {u'attribute2': u'Negative', u'instruction': u'instructions 3', u'target2': u'Insects', u'attribute1': u'Good', u'target1': u'Flowers'},
      {u'attribute2': u'Negative', u'instruction': u'instructions 4', u'target2': u'Insects', u'attribute1': u'Good', u'target1': u'Flowers'},
      {u'attribute2': u'Negative', u'instruction': u'instructions 5', u'target2': u'Insects', u'attribute1': u'Good', u'target1': u'Flowers'},
      {u'attribute2': u'Negative', u'instruction': u'instructions 6', u'target2': u'Insects', u'attribute1': u'Good', u'target1': u'Flowers'},
      {u'attribute2': u'Negative', u'instruction': u'instructions 7', u'target2': u'Insects', u'attribute1': u'Good', u'target1': u'Flowers'},
      {u'attribute2': u'Negative', u'instruction': u'end', u'target2': u'Insects', u'attribute1': u'Good', u'target1': u'Flowers'}]
    Routine instructions3467
  LoopTerminator instructionsLoop3
  LoopInitiator block3Loop loopType="TrialHandler"
    conditionsFile = Stimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine trialBlock3and4
  LoopTerminator block3Loop
  LoopInitiator instructionsLoop4 loopType="TrialHandler"
    conditionsFile = Instructions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
    Selected rows = 3
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    conditions:
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    Routine instructions3467
  LoopTerminator instructionsLoop4
  LoopInitiator block4Loop loopType="TrialHandler"
    conditionsFile = Stimuli.xlsx
    loopType = random
    nReps = 2
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    conditions:
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    Routine trialBlock3and4
  LoopTerminator block4Loop
  LoopInitiator instructionsLoop5 loopType="TrialHandler"
    conditionsFile = Instructions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
    Selected rows = 4
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    conditions:
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    Routine instructions1and5
  LoopTerminator instructionsLoop5
  LoopInitiator block5Loop loopType="TrialHandler"
    conditionsFile = Stimuli.xlsx
    loopType = random
    nReps = 4
    Selected rows = 0:10
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    conditions:
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    Routine trialBlock5
  LoopTerminator block5Loop
  LoopInitiator instructionsLoop6 loopType="TrialHandler"
    conditionsFile = Instructions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
    Selected rows = 5
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    conditions:
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    Routine instructions3467
  LoopTerminator instructionsLoop6
  LoopInitiator block6Loop loopType="TrialHandler"
    conditionsFile = Stimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine trialBlock6and7
  LoopTerminator block6Loop
  LoopInitiator instructionsLoop7 loopType="TrialHandler"
    conditionsFile = Instructions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
    Selected rows = 6
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    conditions:
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    Routine instructions3467
  LoopTerminator instructionsLoop7
  LoopInitiator block7Loop loopType="TrialHandler"
    conditionsFile = Stimuli.xlsx
    loopType = random
    nReps = 2
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    conditions:
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    Routine trialBlock6and7
  LoopTerminator block7Loop
  LoopInitiator endLoop loopType="TrialHandler"
    conditionsFile = Instructions.xlsx
    loopType = sequential
    nReps = 1
    Selected rows = 7
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    conditions:
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    Routine end
  LoopTerminator endLoop
